PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = manipulation-of-belief
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine video
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    MovieComponent video1
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videoFileName
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine SAM_2
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    ImageComponent question_sam_2
      image = stimuli/sam-2.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_2
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SAM_1
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    ImageComponent question_sam_1
      image = stimuli/sam-1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_1
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SAM_3
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    ImageComponent question_sam_3
      image = stimuli/sam-3.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_sam_3
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = variables/subjects_design.csv
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('video1', '4171487-uhd_3840_2160_30fps.mp4'), ('label1', 'AI Generated'), ('video2', '5768645-uhd_3840_2160_25fps.mp4'), ('label2', 'AI Generated'), ('video3', '11946387_3840_2160_30fps.mp4'), ('label3', 'Human Generated'), ('video4', '11946387_3840_2160_30fps.mp4'), ('label4', 'Human Generated')]),
      OrderedDict([('video1', '4171487-uhd_3840_2160_30fps.mp4'), ('label1', 'AI Generated'), ('video2', '5768645-uhd_3840_2160_25fps.mp4'), ('label2', 'AI Generated'), ('video3', '11946387_3840_2160_30fps.mp4'), ('label3', 'Human Generated'), ('video4', '11946387_3840_2160_30fps.mp4'), ('label4', 'AI Generated')]),
      OrderedDict([('video1', '4171487-uhd_3840_2160_30fps.mp4'), ('label1', 'Human Generated'), ('video2', '11946387_3840_2160_30fps.mp4'), ('label2', 'Human Generated'), ('video3', '5768645-uhd_3840_2160_25fps.mp4'), ('label3', 'Human Generated'), ('video4', '11946387_3840_2160_30fps.mp4'), ('label4', 'AI Generated')]),
      OrderedDict([('video1', '4171487-uhd_3840_2160_30fps.mp4'), ('label1', 'Human Generated'), ('video2', '11946387_3840_2160_30fps.mp4'), ('label2', 'Human Generated'), ('video3', '11946387_3840_2160_30fps.mp4'), ('label3', 'Human Generated'), ('video4', '5768645-uhd_3840_2160_25fps.mp4'), ('label4', 'AI Generated')])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
    Routine video
    Routine SAM_1
    Routine SAM_2
    Routine SAM_3
  LoopTerminator trials
